PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = ratouilleExperiment
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $ImageFile
      pos = (0, 0.20)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      units = height
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    TextComponent FamQ
      letterHeight = 0.030
      pos = (-0.50, -0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = How familiar is this food item to you?
      units = height
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    SliderComponent FamSlider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "Extremely")
      letterHeight = 0.025
      pos = (0.5, -0.15)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent ComfQ
      letterHeight = 0.030
      pos = (-0.40, -0.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Do you consider this food item to be a comfort food?
      units = height
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    SliderComponent ComfSlider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "Extremely")
      letterHeight = 0.025
      pos = (0.5, -0.28)
      size = (0.4,0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent NosQ
      letterHeight = 0.030
      pos = (-0.425, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Does this food hold any nostalgic value for you?
      units = height
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    SliderComponent NosSlider
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = ("Not at all", "Extremely")
      letterHeight = 0.025
      pos = (0.5, -0.4)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Crosshair
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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  Routine Intro2
    TextComponent text_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Rating the foods is time sensitive, so please be attentive to the screen. There will be a 15 second break every so often.

        To answer the question, please use the mouse to click on the slider.


        Before we practice the task, we have 1 more question to ask you. Press [Space] to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro1
    TextComponent intro_1
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to The Ratatouille Moment. The purpose of this study is to explore the effect of foods on emotions and homeostasis.

        You will be rating each food image on a set of 3 questions. The goal is to assess the emotional value of each food item for you.


        Press [Space] to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
    TextComponent text_3
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice.

        To begin the experiment, press [Space].
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine hungerscale
    SliderComponent slider
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = ("Not at all", "Extremely")
      letterHeight = 0.030
      pos = (0, -0.1)
      size = (0.4, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_4
      letterHeight = 0.040
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = How hungry do you feel now?
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  Routine Intro3
    TextComponent text_5
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Let's practice the task now. Press [Space] to start.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment! You will reeive your SONA credits within 48 hours.

        Press [Space] to exit.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine attention
    ImageComponent image_2
      image [set every repeat] = images\Demo\tamales.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_7
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Press [Space] if you saw the image
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Flow
  Routine Intro1
  Routine Intro2
  Routine hungerscale
  Routine Intro3
  LoopInitiator demo_trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = demoImageList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'DemoImageFile': 'images/Caucasian/baconEggCheese.jpg', 'ImageName': 'baconEggCheese.jpg', 'FoodType': 'DEMO'},
      {'DemoImageFile': 'images/Caucasian/bagel.jpg', 'ImageName': 'bagel.jpg', 'FoodType': 'DEMO'},
      {'DemoImageFile': 'images/Caucasian/balogneSandwhich.jpg', 'ImageName': 'balogneSandwhich.jpg', 'FoodType': 'DEMO'},
      {'DemoImageFile': 'images/Caucasian/barbequeChickenCorn.jpg', 'ImageName': 'barbequeChickenCorn.jpg', 'FoodType': 'DEMO'},
      {'DemoImageFile': 'images/Caucasian/beefJerky.jpg', 'ImageName': 'beefJerky.jpg', 'FoodType': 'DEMO'}]
    Routine trial
  LoopTerminator demo_trials
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:20
    conditionsFile = C:\Experiment\imageList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'images/coleslow3.jpg'},
      {'ImageFile': 'images/gyro.jpg'},
      {'ImageFile': 'images/porkchopdinner.jpg'}]
    Routine Crosshair
    Routine trial
    Routine attention
  LoopTerminator trials
  Routine hungerscale
  Routine end
